MATLABInstrumentDriver
FileVersion: 1.0
DriverName: D:\A\matlab\matlab\toolbox\instrument\instrument\drivers\agilent_33120a.mdd
DriverType: MATLAB interface object
InstrumentType: Function Generator
InstrumentManufacturer: Tektronix
InstrumentModel: 3000 series
InstrumentVersion: 1.0
Identify: *IDN?
Reset: *RST
Selftest: *TST?
Error: System:Error?

CreateInitCode
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
ConnectInitCode
  Type: InstrumentCommand

CleanupCode
  Type: InstrumentCommand

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property TriggerSlope
    Type: InstrumentCommand
    ConfigureCommand: TRIGger:SEQuence:SLOPe
    QueryCommand: TRIGger:SEQuence:SLOPe?
    PermissibleType: String enum [positive=POSitive, negative=NEGative]
    DefaultValue: positive
    ReadOnly: never
    Description: Select the polarity of the EXT Trig terminal.

  Property TriggerSource
    Type: InstrumentCommand
    ConfigureCommand: TRIGger:SEQuence:SOURce
    QueryCommand: TRIGger:SEQuence:SOURce?
    PermissibleType: String enum [timer=TIMer, external=EXTernal]
    DefaultValue: timer
    ReadOnly: never
    Description: Select the source from which the function generator will accept a trigger.

  Method calibration
    Type: InstrumentCommand
    Line Command="CALibration:ALL" Format="int8" Output="true" ReadOutputAs="Binary"
    Description: TRIGGER Send a software trigger to the instrument.

      INVOKE(OBJ, 'trigger') sends a software trigger to the instrument.

  Method diagnostic
    Type: InstrumentCommand
    Line Command="DIAGnostic:ALL?" Format="int8" Output="true" ReadOutputAs="Binary"

  Method trigger
    Type: InstrumentCommand
    Line Command="*TRG" Output="false"
    Description: TRIGGER Send a software trigger to the instrument.

      INVOKE(OBJ, 'trigger') sends a software trigger to the instrument.

Group amplitudemodulation
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Depth
    Type: InstrumentCommand
    ConfigureCommand: <ID>:AM:DEPTh
    QueryCommand: <ID>:AM:DEPTh?
    PermissibleType: Double bounded [Max="120.0" Min="0.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 100
    ReadOnly: never
    Description: Set the internal modulation depth in percent. 

      Select from 0% to 120%. The default is 100%.

      If you select an external modulating source, the modulation depth is controlled by the signal level present on the AM Modulation terminal (5 volts peak corresponds to 100% modulation).

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: <ID>:AM:STATe
    QueryCommand: <ID>:AM:STATe?
    PermissibleType: String enum [off=0, on=1]
    DefaultValue: off
    ReadOnly: never
    Description: Disable or enable AM.
 
      To ensure proper operation, you should enable AM after you have set up the other modulation parameters. Only one modulation mode can be enabled at a time. When you enable AM the previous modulation is turned off.

  Property InternalFrequency
    Type: InstrumentCommand
    ConfigureCommand: <ID>:AM:INTernal:FREQuency
    QueryCommand: <ID>:AM:INTernal:FREQuency?
    PermissibleType: Double bounded [Max="50000.0" Min="0.0020"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Select the frequency of the modulating waveform.

      Used only when the internal modulation source is selected.
      Select from 10 mHz to 20 kHz. The default is 100 Hz.

  Property InternalWaveform
    Type: InstrumentCommand
    ConfigureCommand: <ID>:AM:INTernal:FUNCtion
    QueryCommand: <ID>:AM:INTernal:FUNCtion?
    PermissibleType: String enum [sin=SIN, square=SQU, triangle=TRI, ramp=RAMP, pseudo-random noise=PRNoise, user1=USER1, user2=USER2, user3=USER3, user4=USER4]
    DefaultValue: sin
    ReadOnly: never
    Description: Select the shape of the modulating waveform. 

      Used only when the internal modulation source is selected. You can use the noise function as the modulating waveform. However, you cannot use the noise function as or dc volts as the carrier waveform.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: <ID>:AM:SOURce
    QueryCommand: <ID>:AM:SOURce?
    PermissibleType: String enum [internal=INTernal, external=EXTernal]
    DefaultValue: internal
    ReadOnly: never
    Description: Select the source of the modulating signal.

      The function generator will accept an internal modulating signal, an external modulating signal, or both. The default is BOTH.

Group burstmode
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Cycles
    Type: InstrumentCommand
    ConfigureCommand: <ID>:BURSt:NCYCles
    QueryCommand: <ID>:BURSt:NCYCles?
    PermissibleType: Double bounded [Max="50000.0" Min="1.0"]
    PermissibleType: String enum [min=MIN, max=MAX, infinity=INF]
    DefaultValue: 1
    ReadOnly: never
    Description: Set the number of cycles to be output per burst( Trigger burst mode only).

      Select from one cycle to 50 000 cycles, in 1 cycles increments. The default is 1 cycle.

  Property DelayTime
    Type: InstrumentCommand
    ConfigureCommand: <ID>:BURSt:TDELay
    QueryCommand: <ID>:BURSt:TDELay?
    PermissibleType: Double bounded [Max="50000.0" Min="0.01"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Set the burst rate for internally triggered bursts.

      The burst rate frequency defines the interval between bursts. Select from 10 mHz to 50 kHz. The default is 100 Hz.

      The burst rate is used only when internal triggering is enables. The burst rate is ignored when single triggering or external triggering is enabled.

      It is possible to specify a burst rate that is too fast for the function generator to output with the specified carrier frequency and burst count. If the burst rate is too high, the function generator will internally adjust it as needed to continuously re-trigger the burst. The adjustment is handled internally by the function generator.

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: <ID>:BURSt:STATe
    QueryCommand: <ID>:BURSt:STATe?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Enable or disable burst modulation. 

      To ensure proper operation, you should enable the burst mode after you have set other modulation parameters. Only one modulation mode can be enabled at a time.
      When you enable the burst mode, the previous modulation mode is turned off.

Group display
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property Contrast
    Type: InstrumentCommand
    ConfigureCommand: DISPlay:CONTrast
    QueryCommand: DISPlay:CONTrast?
    PermissibleType: Double bounded [Max="1.0" Min="0.0"]
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0.0
    ReadOnly: never
    Description: Turn the front panel display on or off.

  Property Screensaver
    Type: InstrumentCommand
    ConfigureCommand: DISPlay:SAVer:STATe
    QueryCommand: DISPlay:SAVer:STATe?
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: on
    ReadOnly: never

  Property TextClear
    Type: InstrumentCommand
    ConfigureCommand: DISPlay:WINDow:TEXT:CLEar
    QueryCommand: DISPlay:WINDow:TEXT:CLEar?
    PermissibleType: String none
    ReadOnly: never

  Property TextMessage
    Type: InstrumentCommand
    ConfigureCommand: DISPlay:WINDow:TEXT:DATA
    QueryCommand: DISPlay:WINDow:TEXT:DATA?
    PermissibleType: String none
    ReadOnly: never

  Method TextClear
    Type: InstrumentCommand
    Line Command="DISPlay:WINDow:TEXT:CLEar" Output="false"
    Description: INVOKE(obj,settext,text) Display a message containing up to eleven characters on the front panel.

Group frequency
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Center
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency:CENTer
    QueryCommand: <ID>:FREQuency:CENTer?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MINimum, maximum=MAXimum]
    DefaultValue: 450000.0
    ReadOnly: never

  Property ConcurrentState
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency:CONCurrent
    QueryCommand: <ID>:FREQuency:CONCurrent?
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: on
    ReadOnly: never

  Property Frequency
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency
    QueryCommand: <ID>:FREQuency?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency:MODE
    QueryCommand: <ID>:FREQuency:MODE?
    PermissibleType: String enum [Continuous=CW, Fixed=FIXed]
    DefaultValue: Continuous
    ReadOnly: never

  Property Span
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency:SPAN
    QueryCommand: <ID>:FREQuency:SPAN?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property Start
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency:STARt
    QueryCommand: <ID>:FREQuency:STARt?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property Stop
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency:STOP
    QueryCommand: <ID>:FREQuency:STOP?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0
    ReadOnly: never

Group frequencymodulation
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FM:STAte
    QueryCommand: <ID>:FM:STAte?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Disable or enable FM. 

      To ensure proper operation, you should enable FM after you have set up the other modulation parameters. Only one modulation mode can be enabled at a time. When you enable FM, the previous modulation mode is turned off.

  Property InternalDeviation
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FM:DEViation
    QueryCommand: <ID>:FM:DEViation?
    PermissibleType: Double bounded [Max="100000.0" Min="0.01"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 100
    ReadOnly: never
    Description: Set the peak frequency deviation in Hertz.

      This value represents the variation in frequency of the modulating waveform.  from the carrier frequency.

      Select from 10 mHz to 7.5 MHz. Default is 100 Hz.

      The carrier frequency must always be greater than or equal to the peak Frequency deviation. If you attempt to set the deviation to a value greater than the carrier frequency (with FM enabled), the function generator will automatically adjust the deviation to equal the carrier frequency.

      The sum of the carrier frequency and peak frequency deviation must be less than or equal to the maximum frequency for the selected function plus 100 kHz. If you attempt to set the deviation to an invalid value, the multimeter will automatically adjust the value to the maximum value allowed with the present carrier frequency.

  Property InternalFrequency
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FM:INTernal:FREQuency
    QueryCommand: <ID>:FM:INTernal:FREQuency?
    PermissibleType: Double bounded [Max="10000.0" Min="0.01"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Select the frequency of the modulating waveform.

      Select from 10 mHz to 100 kHz. The default is 10 Hz.

  Property InternalWaveform
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FM:INTernal:FUNCtion
    QueryCommand: <ID>:FM:INTernal:FUNCtion?
    PermissibleType: String enum [sin=SINusoid, square=SQUare, triangle=TRIangle, ramp=RAMP, noise=NOIS, nramp=NRAMp, PRNoise=PRNoise, User1=USER1, User2=USER2, User3=USER3, User4=USER4, EMEMory=EMEMory, EFILe=EFILe]
    PermissibleType: Double none
    DefaultValue: sin
    ReadOnly: never
    Description: Select the shape of the modulating function.

      You can use the noise function as a modulating waveform. However, you cannot use the noise function as a carrier waveform. The default value is SIN.

Group fskmodulation
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: FSKey:STATe
    QueryCommand: FSKey:STATe?
    PermissibleType: String enum [on=1, off=0]
    DefaultValue: on
    ReadOnly: never
    Description: Disable or enable the FSK mode. 

      To ensure proper operation, you should enable AM after you have set up the other modulation parameters. Only one modulation mode can be enabled at a time. When you enable AM the previous modulation is turned off.

  Property Frequency
    Type: InstrumentCommand
    ConfigureCommand: FSKey:FREQuency
    QueryCommand: FSKey:FREQuency?
    PermissibleType: Double bounded [Max="1.5E7" Min="0.01"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Set the FSK "hop" frequency from 10 mHz to 15 MHz.

      The default value is 100 Hz.

  Property InternalRate
    Type: InstrumentCommand
    ConfigureCommand: FSKey:INTernal:RATE
    QueryCommand: FSKey:INTernal:RATE?
    PermissibleType: Double bounded [Max="50000.0" Min="0.01"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 10
    ReadOnly: never
    Description: Set the rate at which the internal frequency "shifts" between the carrier and hop frequency. 

      Select from 10 mHz to 50 kHz, The default is 10 Hz.

      The FSK rate is ignored when the external source is selected.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: FSK:SOURCe
    QueryCommand: FSK:SOURCe?
    PermissibleType: String enum [internal=INT, external=EXT]
    DefaultValue: internal
    ReadOnly: never
    Description: Select an internal or external FSK.

      The default is INT.

      When the internal source is selected, the rate at which output frequency "shifts" between carrier frequency and hop frequency is determined by the FSK rate specified.

      When external source is selected, the output frequency is determined by the signal level on the rear-panel FSK terminal. When a low "TTL" is level is present, the carrier frequency is output.

      The maximum external FSK rate is 1 MHz.

      The external annunciator turns on when the function generator is waiting for external trigger signal.

Group output
  Size: 2
  Mappings
    ChannelMap Command="OUTPut2" Index="2"
    ChannelMap Command="OUTPut1" Index="1"

  Property Impedance
    Type: InstrumentCommand
    ConfigureCommand: <ID>:IMPedance
    QueryCommand: <ID>:IMPedance?
    PermissibleType: Double bounded [Max="10000.0" Min="1.0"]
    PermissibleType: String enum [Minimum=MINimum, Maximum=MAXimum, Infinity=INFinity]
    DefaultValue: 1.0
    ReadOnly: never

  Property Polarity
    Type: InstrumentCommand
    ConfigureCommand: <ID>:POLarity
    QueryCommand: <ID>:POLarity?
    PermissibleType: String enum [Normal=NORMal, Inverted=INVerted]
    DefaultValue: Normal
    ReadOnly: never

  Property State
    Type: InstrumentCommand
    ConfigureCommand: <ID>:STATe
    QueryCommand: <ID>:STATe?
    PermissibleType: String enum [On=ON, Off=OFF]
    DefaultValue: On
    ReadOnly: never

  Property Trigger
    Type: InstrumentCommand
    ConfigureCommand: <ID>:TRIGger:MODE
    QueryCommand: <ID>:TRIGger:MODE?
    PermissibleType: String enum [Trigger=TRIGger, Sync=SYNC]
    DefaultValue: Trigger
    ReadOnly: never

Group phase
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Adjust
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PHASe:ADJust
    QueryCommand: <ID>:PHASe:ADJust?
    PermissibleType: Double bounded [Max="180.0" Min="-180.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: -180.0
    ReadOnly: never
    Description: This command sets or queries the phase of output waveform for the specified
      channel. You can set the value in radians or degrees. If no units are specified, the
      default is RAD. The query command returns the value in RAD.
      This command is supported when you select a waveform other than DC, Noise, and
      Pulse.

  Property Initiate
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PHASe:INITiate
    QueryCommand: <ID>:PHASe:INITiate?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: This command synchronizes the phase of CH 1 and CH 2 output waveforms. The
      arbitrary/function generator performs the same operation if you specify either
      SOURce1 or SOURce2.

      (no query form)

Group pm
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Deviation
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PM:DEViation
    QueryCommand: <ID>:PM:DEViation?
    PermissibleType: Double bounded [Max="180.0" Min="-180.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property Efile
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PM:INTernal:FUNCtion:EFILe
    QueryCommand: <ID>:PM:INTernal:FUNCtion:EFILe?
    PermissibleType: String none
    DefaultValue: 0
    ReadOnly: never
    Description: This command sets or queries an EFILe name used as a modulating waveform for
      PM modulation. A file name must be specified in the mass storage system. This
      command returns “ ” if there is no file in the mass storage.

  Property Frequency
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PM:INTernal:FREQuency
    QueryCommand: <ID>:PM:INTernal:FREQuency?
    PermissibleType: Double none
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property Function
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PM:INTernal:FUNCtion
    QueryCommand: <ID>:PM:INTernal:FUNCtion?
    PermissibleType: String enum [sin=SIN, square=SQU, triangle=TRI, ramp=RAMP, Nramp=NRAM, pseudo-rand noise=PRN, user1=USER1, user2=USER2, user3=USER3, user4=USER4, Ememory=EMEM, Efile=EFIL]
    DefaultValue: 0
    ReadOnly: never

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PM:SOURce
    QueryCommand: <ID>:PM:SOURce?
    PermissibleType: String enum [internal=INTernal, external=EXTernal]
    DefaultValue: internal
    ReadOnly: never

  Property State
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PM:STATe
    QueryCommand: <ID>:PM:STATe?
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: on
    ReadOnly: never

Group Power
  Size: 2
  Mappings
    ChannelMap Command="SOURce4" Index="2"
    ChannelMap Command="SOURce3" Index="1"

  Property Level
    Type: InstrumentCommand
    ConfigureCommand: <ID>::POWer:LEVel:IMMediate:AMPLitude
    QueryCommand: <ID>::POWer:LEVel:IMMediate:AMPLitude?
    PermissibleType: Double bounded [Max="100.0" Min="0.0"]
    PermissibleType: String enum [min=MIN, max=MAX]
    ReadOnly: never
    Description: This command sets or queries the internal noise level which applies to the output
      signal for the specified channel. The noise level represents the percent against
      current amplitude level. The setting range is 0 to 50%.
      This command is available when Run Mode is set to Continuous, Burst, or Sweep.
      You can set or query whether to add the internal noise to the output signal using the
      [SOURce[1|2]]:COMBine:FEED command.

Group pulse
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property DutyCycle
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PULSe:DCYCle
    QueryCommand: <ID>:PULSe:DCYCle?
    PermissibleType: Double bounded [Max="99.9" Min="0.1"]
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0.1
    ReadOnly: never
    Description: This command sets or queries the duty cycle of the pulse waveform for the specified
      channel. The setting range is 0.1% to 99.9% in increments of 0.1.

      The arbitrary/function generator will hold the settings of leading edge and trailing
      edge when the duty cycle is varied.

  Property Hold
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PULSe:HOLD
    QueryCommand: <ID>:PULSe:HOLD?
    PermissibleType: String enum [width=WIDTh, duty=DUTY]
    DefaultValue: width
    ReadOnly: never
    Description: The [SOURce[1|2]]:PULSe:HOLD command sets the arbitrary/function generator
      to hold either pulse width or pulse duty.

  Property LeadDelay
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PULSe:DELay
    QueryCommand: <ID>:PULSe:DELay?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0
    ReadOnly: never
    Description: This command sets or queries the lead delay of the pulse waveform for the specified
      channel.

      Setting range: 0 ns to Pulse Period – {Pulse Width + 0.8 × (Leading Edge Time +
      Trailing Edge Time)}

  Property LeadingEdgeTime
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PULSe:TRANsition:LEADing
    QueryCommand: <ID>:PULSe:TRANsition:LEADing?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property Period
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PULSe:PERiod
    QueryCommand: <ID>:PULSe:PERiod?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property TrailingEdgeTime
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PULSe:TRANsition:TRAiling
    QueryCommand: <ID>:PULSe:TRANsition:TRAiling?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property Width
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PULSe:WIDTh
    QueryCommand: <ID>:PULSe:WIDTh?
    PermissibleType: Double none
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0
    ReadOnly: never
    Description: This command sets or queries the pulse width for the specified channel.

      Pulse Width = Period × Duty Cycle / 100

      The pulse width must be less than the period. The setting range is 0.1% to 99.9%
      in terms of duty cycle.

      AFG3021 and AFG3022: 30 ns to 999 s
      AFG3101 and AFG3102: 8 ns to 999 s
      AFG3251 and AFG3252: 4 ns to 999 s

      Pulse Width ≤ Pulse Period – 0.8 × (Leading Edge Time + Trailing Edge Time)
      Pulse Width ≥ 0.625 × (Leading Edge Time + Trailing Edge Time)

Group pwm
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Deviation
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PWM:DEViation:DCYCle
    QueryCommand: <ID>:PWM:DEViation:DCYCle?
    PermissibleType: Double bounded [Max="100.0" Min="0.0"]
    PermissibleType: String enum [minimum=MIN, maximum=MAX]
    DefaultValue: 0.0
    ReadOnly: never
    Description: This command sets or queries the PWM deviation in percent for the specified
      channel.

      The setting range must meet the following conditions:
      Deviation ≤ Pulse Width – PWmin
      Deviation ≤ Pulse Period – Pulse Width – PWmin
      Deviation ≤ Pulse Width – 0.8 × (Leading Edge Time + Trailing Edge Time)
      Deviation ≤ Pulse Period – Pulse Width – 0.8 × (Leading Edge Time + Trailing
      Edge Time)
      where PWmin is the minimum pulse width.

  Property Function
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PWM:INTernal:FUNCtion
    QueryCommand: <ID>:PWM:INTernal:FUNCtion?
    PermissibleType: String enum [sin=SIN, square=SQU, triangle=TRI, ramp=RAMP, Nramp=NRAM, pseudo-random noise=PRN, user1=USER1, user2=USER2, user3=USER3, user4=USER4, EMemory=EMEM, EFile=EFIL]
    DefaultValue: sin
    ReadOnly: never

  Property InternalFrequency
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PWM:INTernal:FREQuency
    QueryCommand: <ID>:PWM:INTernal:FREQuency?
    PermissibleType: Double none
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property InternalFunctionEfile
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PWM:INTernal:FUNCtion:EFILe
    QueryCommand: <ID>:PWM:INTernal:FUNCtion:EFILe?
    PermissibleType: String none
    ReadOnly: never
    Description: This command sets or queries an EFILe name used as a modulating waveform for
      PWM modulation. A file name must be specified in the mass storage system. This
      command causes an error if there is no file in the mass storage.

      Examples: SOURce1:PWM:INTernal:FUNCtion:EFILe “SAMPLE1”
      creates a file named “SAMPLE1” in the mass storage.

  Property Source
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PWM:SOURce
    QueryCommand: <ID>:PWM:SOURce?
    PermissibleType: String enum [internal=INT, external=EXT]
    DefaultValue: internal
    ReadOnly: never

  Property State
    Type: InstrumentCommand
    ConfigureCommand: <ID>:PWM:STATe
    QueryCommand: <ID>:PWM:STATe?
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: on
    ReadOnly: never

Group RefOscillator
  Size: 1
  Mappings ChannelMap Command="SOURce" Index="1"

  Property SOURce
    Type: InstrumentCommand
    ConfigureCommand: <ID>:ROSCillator:SOURce
    QueryCommand: <ID>:ROSCillator:SOURce?
    PermissibleType: String enum [internal=INT, external=EXT]
    ReadOnly: never

Group StatusRegs
  Size: 1
  Mappings ChannelMap Command="StatusRegs1" Index="1"

  Property OperationCondition
    Type: InstrumentCommand
    QueryCommand: STATus:OPERation:CONDition?
    PermissibleType: Double none
    ReadOnly: never

  Property OperationEnable
    Type: InstrumentCommand
    ConfigureCommand: STATus:OPERation:ENABle
    QueryCommand: STATus:OPERation:ENABle?
    PermissibleType: Double none
    ReadOnly: never

  Property OperationEvent
    Type: InstrumentCommand
    QueryCommand: STATus:OPERation:EVENt?
    PermissibleType: Double none
    ReadOnly: never

  Property Preset
    Type: InstrumentCommand
    ConfigureCommand: STATus:PRESet
    PermissibleType: Double none
    ReadOnly: never

  Property QuestionableCondition
    Type: InstrumentCommand
    QueryCommand: STATus:QUEStionable:CONDition?
    PermissibleType: Double none
    ReadOnly: never

  Property QuestionableEnable
    Type: InstrumentCommand
    ConfigureCommand: STATus:QUEStionable:ENABle
    QueryCommand: STATus:QUEStionable:ENABle?
    PermissibleType: Double none
    ReadOnly: never

  Property QuestionableEvent
    Type: InstrumentCommand
    QueryCommand: STATus:QUEStionable:EVENt?
    PermissibleType: Double none
    ReadOnly: never

Group sweep
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Enabled
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency:MODE
    QueryCommand: <ID>:FREQuency:MODE?
    PermissibleType: String enum [off=CW, on=SWEEP]
    DefaultValue: On
    ReadOnly: never

  Property HoldTime
    Type: InstrumentCommand
    ConfigureCommand: <ID>:SWEep:HTIMe
    QueryCommand: <ID>:SWEep:HTIMe?
    PermissibleType: Double none
    PermissibleType: String enum [min=MIN, max=MAX]
    ReadOnly: never

  Property Mode
    Type: InstrumentCommand
    ConfigureCommand: <ID>:SWEep:MODE
    QueryCommand: <ID>:SWEep:MODE?
    PermissibleType: String enum [AUTO=AUTO, MANual=MAN]
    ReadOnly: never

  Property ReturnTime
    Type: InstrumentCommand
    ConfigureCommand: <ID>:SWEep:RTIMe
    QueryCommand: <ID>:SWEep:RTIMe?
    PermissibleType: Double none DependentProperty=Time DependentPropertyValue=min
    PermissibleType: String enum [min=MIN, max=MAX]
    ReadOnly: never

  Property Spacing
    Type: InstrumentCommand
    ConfigureCommand: <ID>:SWEep:SPACing
    QueryCommand: <ID>:SWEep:SPACing?
    PermissibleType: String enum [linear=LIN, log=LOG]
    DefaultValue: linear
    ReadOnly: never
    Description: Select the linear or the algorithmic spacing for the sweep.

      The default is linear.

  Property Start
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency:STARt
    QueryCommand: <ID>:FREQuency:STARt?
    PermissibleType: Double bounded [Max="1.5E7" Min="0.01"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0.01
    ReadOnly: never
    Description: Set the start frequency 

      Select from 10 mHz to 15 MHz. the sweep is phase continuous over the full frequency range. The default is 100 Hz.]

      Executing the *RST command does not set the start and stop frequency to their default values. Instead the restart operation set the start frequency to 10 mHz(minimum) and the stop frequency to 15 MHz (maximum).

  Property Stop
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FREQuency:STOP
    QueryCommand: <ID>:FREQuency:STOP?
    PermissibleType: String enum [max=MAX, min=MIN]
    PermissibleType: Double bounded [Max="1.5E7" Min="0.01"]
    DefaultValue: 1000
    ReadOnly: never
    Description: Set the stop frequency. 

      Select from 10mHz to 15 MHz. The sweep is phase is continuous over the full frequency range. The default is 1 kHz.

      Executing the *RST command does not set the start and stop frequency to their default values. Instead the restart operation set the start frequency to 10 mHz(minimum) and the stop frequency to 15 MHz (maximum).

  Property Time
    Type: InstrumentCommand
    ConfigureCommand: <ID>:SWEep:TIME
    QueryCommand: <ID>:SWEep:TIME?
    PermissibleType: Double bounded [Max="500.0" Min="0.0010"]
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 1
    ReadOnly: never
    Description: Set the number of seconds required to sweep from start of the frequency sweep to stop frequency.

      Select from 1 ms to 500 seconds.

      The number of frequency points in the sweep depends on the sweep time you select and is automatically calculated by the function generator.

Group system
  Size: 1

  Property Version
    Type: InstrumentCommand
    QueryCommand: System:VERsion?
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Query the function generator to determine the present SCPI version.

  Method beep
    Type: InstrumentCommand
    Line Command="SYSTem:BEEPer" Output="false"
    Description: INVOKE(obj,beep) to issue asingle beep immediately.

  Method deletestate
    MCode:
      function deletestate(obj, location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 0 and 4, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif  location >4 || location <0
                  error('LOCATION must be between 0 and 4 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['MEMory:STATe:DELete ' num2str(location)])

      % Return state name
      propertyValue = fscanf(interface)
    Description: INVOKE(obj,loadstate,location) to delete a previously stored state.

  Method loadstate
    MCode:
      function loadstate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 0 and 4, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif  location >4 || location <0
                  error('LOCATION must be between 0 and 4 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*RCL ' num2str(location)])

      % Return state name
      propertyValue = fscanf(interface)
    Description: INVOKE(obj,loadstate,location) to recall a previously stored state.

  Method savestate
    MCode:
      function savestate(obj,location)
      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% LOCATION is the specified storage location

      % Get the interface
      interface = get(get(obj,'parent'),'interface');

      % Error checking
          % LOCATION must be a scalar and between 0 and 4, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif  location >4 || location <0
                  error('LOCATION must be between 0 and 4 inclusive');
          end

      % Send memory name query command
      fprintf(interface,['*SAV ' num2str(location)])

      % Return state name
      propertyValue = fscanf(interface)
    Description: INVOKE(obj,savestate,location) to store an instrument configuration at a LOCATION.

Group voltage
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property Amplitude
    Type: InstrumentCommand
    ConfigureCommand: <ID>:VOLTage:LEVel:IMMediate:AMPLitude
    QueryCommand: <ID>:VOLTage:LEVel:IMMediate:AMPLitude?
    PermissibleType: Double none
    PermissibleType: String enum [min=MIN, max=MAX]
    ReadOnly: never

  Property concurrent
    Type: InstrumentCommand
    ConfigureCommand: <ID>:VOLTage:CONCurrent:STATe
    QueryCommand: <ID>:VOLTage:CONCurrent:STATe?
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: 0
    ReadOnly: never
    Description: This command enables or disables the function to copy the voltage level of one
      channel to another channel.

      The[SOURce[1|2]]:VOLTage:CONCurrent[:STATe] command copies the
      voltage level of the channel specified by the header suffix to another channel. If
      you specify CH 1 with the header, the CH 1 voltage level will be copied to CH 2.

      The query command returns “0” (off) or “1” (on).

      If your arbitrary/function generator is a single-channel model, this command is not
      supported.

  Property Highlevel
    Type: InstrumentCommand
    ConfigureCommand: <ID>:VOLTage:LEVel:IMMediate:HIGH
    QueryCommand: <ID>:VOLTage:LEVel:IMMediate:HIGH?
    PermissibleType: Double none
    PermissibleType: String enum [min=MIN, max=MAX]
    DefaultValue: 0
    ReadOnly: never

  Property Highlimit
    Type: InstrumentCommand
    ConfigureCommand: <ID>:VOLTage:LIMit:HIGH
    QueryCommand: <ID>:VOLTage:LIMit:HIGH?
    PermissibleType: Double none
    PermissibleType: String enum [min=MIN, max=MAX]
    ReadOnly: never

  Property Lowlevel
    Type: InstrumentCommand
    ConfigureCommand: <ID>:VOLTage:LEVel:IMMediate:LOW
    QueryCommand: <ID>:VOLTage:LEVel:IMMediate:LOW?
    PermissibleType: Double none
    PermissibleType: String enum [min=MIN, max=MAX]
    ReadOnly: never

  Property Lowlimit
    Type: InstrumentCommand
    ConfigureCommand: <ID>:VOLTage:LIMit:LOW
    QueryCommand: <ID>:VOLTage:LIMit:LOW?
    PermissibleType: Double none
    PermissibleType: String enum [min=MIN, max=MAX]
    ReadOnly: never

  Property unit
    Type: InstrumentCommand
    ConfigureCommand: <ID>:VOLTage:UNIT
    QueryCommand: <ID>:VOLTage:UNIT?
    PermissibleType: String enum [Vpp=VPP, VRMS=VRMS, DMB=DBM]
    DefaultValue: 0
    ReadOnly: never

Group waveform
  Size: 2
  Mappings
    ChannelMap Command="SOURce2" Index="2"
    ChannelMap Command="SOURce1" Index="1"

  Property EFile
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FUNCtion:EFILe
    QueryCommand: <ID>:FUNCtion:EFILe?
    PermissibleType: String none
    ReadOnly: never
    Description: This command sets or queries an EFILe name used as an output waveform. A file
      name must be specified in the mass storage system. This command returns “ ” if
      there is no file in the mass storage.

  Property Ramp
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FUNCtion:RAMP:SYMMetry
    QueryCommand: <ID>:FUNCtion:RAMP:SYMMetry?
    PermissibleType: Double bounded [Max="100.0" Min="0.0"]
    PermissibleType: String enum [min=MINimum, max=MAXimum]
    DefaultValue: 0.0
    ReadOnly: never
    Description: This command sets or queries the symmetry of ramp waveform for the specified
      channel.

  Property Shape
    Type: InstrumentCommand
    ConfigureCommand: <ID>:FUNCtion:SHAPe
    QueryCommand: <ID>:FUNCtion:SHAPe?
    PermissibleType: String enum [sin=SINusoid, square=SQUare, pulse=PULSe, ramp=RAMP, pseudo-random noise=PRNoise, DC=DC, Sinc=SINC, Gaussian=GAUSsian, Lorentz=LORentz, Erise=ERISe, Edecay=EDECay, Haversine=HAVersine, User1=USER1, User2=USER2, User3=USER3, User4=USER4, EMemory=EMEMory, EFile=EFILe]
    DefaultValue: sin
    ReadOnly: never
